#notes
Basic support for Xitron 2000I/M calibrators.
 - doesn't implement Measure mode yet
 - only tested with the RS232 option.
 - The unit needs RTS/CTS flow ctl : at least loopback (may need extra delays), ideally wired properly.
 - °F not implemented, on purpose.

TODO:
 - measure mode
 - Calculated mode
 - active/passive CJC stuff
 - improve Setup menu; would be nice to adjust Temperature limits according to TC type

#idString Xitron, 2000,
#name Xitron/Vitrek 2000
#handle XITRON2000
#port com
#driver ascii
#eol \r\n

#author fenugrec


; protocol particularities:
; - IEEE488/GPIB should support the same commands; not sure how to support both with one file.
; - cannot reliably query current mode (display string is identical in Operate and Measure modes)
; - only STBY mode has an indication on the display
; - no idn query or similar
; - doesn't like explicit '+' sign, but still accepts it ?
; - contrary to docs, instrument doesn't send a space before replying to a '@' query. See examples below
;
; (general docs for device files: https://lygte-info.dk/project/TestControllerConfigDevice%20UK.html )
; This file has a UTF8 BOM.
;
; to debug string ops : open calculator popup :
; - enter "var value="+1.000mVSTBY",
; - then e.g. "getMatchGroup(value, "[ um]([VACF])",1)"


;  column name,  unit, formatter (SI, Time, Int, D0..D6), selector
#value VoltageSet V si V_generate
#value CurrentSet A si I_generate
#value TempSet ° X2 T_generate


; @ : "the instrument responds by sending a single space character [** Nope !! **],
; followed by the 16 character display string, and terminating by CR + LF "
;
; Example actual return strings for '@' query: (string is terminated with \r\n)
; "+100.0000mV STBY"
; " -2.00000mV STBY"
; "-2.000000 V STBY"
; 
; "+.0000000 A STBY"
; "-1.000000mA STBY"
; "+12.00000uA STBY"
; 
; In the following, "K" is thermocouple type. Could be one of [BEJKNERST]
; "   +0.00 C KSTBY"
; "   -1.00 C KSTBY"
; "  +30.20 F KSTBY"
; 
; "Operate" (output on) : similar, more space padding, "STBY" not shown
; 
; "  -34.55 C K    "
; " +3.00000mA     "
; "   +10.00uV     "
; " +23.0000mV     "
; 
; "Measure", i.e. acting like a DMM :
; "+.0534194 V     "
; " +829.40 C J    "
; and so on.


; How to poll for data, this is used for table and #values?
; a #askMode, #cmdMode and #prepareSample is used before this is string is used.
; This is a single line command
#askValues READ:DISP?

; Format of answer: f=float, u=remove trailing letters, x=skip, s=number with optional SI prefix
The input is processes by readmath and split on , and space before using this function.
; we would like something like a regex [ ]?(.*)[ um][VACF].*
#askValuesReadFormat suuuu


; Accept this delay when reading values (seconds)
;#readingDelay 2

; Mode change have a longer delay on reading values (seconds)
;#modeChangeDelay 10

; Switch meter to this mode during start, leave empty to avoid any switching
#initialMode 

; String to ask about actual meter mode, from display string
#askMode READ:DISP?
#askModeMathFormat getMatchGroup(value, "[ um]([VACF])",1)
#modeFromValue getMatchGroup(value, "[ um]([VACF])",1)

; When one of these commands are used through the command interface a new configuration will be done before using #askMode
; Only one word for each #mayModifyMode
; Specify command without initial colon and in the shortest possible form
;#mayModifyMode 


; Prepare the meter to response to #askValues
#prepareSample


; Initial commands to meter when establishing connection
#initCmd

; Final command to meter before breaking connection
#finalCmd

#outputOff SET:ACTIVE S

;*************************************** mode selection 

; col row
#cmdModeLayout 2 3

; Strings to configure device in different modes
; First parameter must match a #value (4 parameter) and second parameter must match what #askMode returns
; First parameter is also used in shortcut menu

#cmdMode V_generate V SET:vmode

#cmdMode I_generate A SET:imode

#cmdMode T_generate C SET:tmode


;*************************************** synthetic SCPI commands

#scpiCmd READ:DISP? txrx? @

#scpiCmd SET:ACTIVE tx (value)



; couldn't get this to work
;#scpiCmd READ:ACTIVE? txrx @
; :setvar: outputState = stateStrings[countMatch(value, "STBY")]

; gross : to change mode, disable 'calculated mode', output to 0<unit>, and Standby mode
#scpiCmd SET:vmode tx K00VS
#scpiCmd SET:imode tx K00AS
#scpiCmd SET:tmode tx K00CS


#scpiCmd SET:V tx ("K00"+formatSI((value))+"V")
#scpiCmd SET:I tx ("K00"+formatSI((value))+"A")
#scpiCmd SET:T tx ("K00"+formatSI((value))+"C")

#scpiCmd SET:TCtype tx ("T"+value)


;*************************************** setup stuff

; Setup menu functions
; The parameters on the first line is: "#cmdSetup controlType name {page}"
; Settings on the following lines are:
; read: SCPI to read value from device, is used to synchronize when opening setup page or setting equal named fields. Not always used
; readformat: Parse read value.
; write: Send the value to device, this field is used in combination with data fields in the details to send updates to device.
; tip: Add this tip to all components for this input field.


#cmdSetup selector Mode_settings
;:read:
:updatemodechange:
V V_generate.
I I_generate.
T T_generate.


#cmdSetup comboboxhot Thermocouple
:write: SET:TCtype
:read:
Type_B B
Type_E E
Type_J J
Type_K K
Type_N N
Type_R R
Type_S S
Type_T T

#cmdSetup number Voltage
:read: READ:DISP?
:readformat: su
:write: SET:V
:tip: Setup this voltage, does not change output state
Volt -22 22

#cmdSetup number Current
:read: READ:DISP?
:readformat: su
:write: SET:I
:tip: Setup this current, does not change output state
Amps -22m 22m

; not all TC types will take the full range of temperatures
#cmdSetup number Temperature
:read: READ:DISP?
:readformat: su
:write: SET:T
:tip: Setup this voltage, do not turn output on/off
°C -270 1820


;had to add 'updatedelayed' because it relies on reading the display string to interpret state.
#cmdSetup buttonsOn Output
:read: READ:DISP?
:readmath: countMatch(value, "STBY")==1? "S":"O"
:write: SET:ACTIVE
:string:
:color: green
:updatedelayed: 0.2
:updatealloff:
standby S
active O
